# Generated by Configurator on Fri Feb 21 20:42:27 CST 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,COM17,SerialManager,COM17
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,XYStage,Prior,XYStage

# Pre-init settings for devices
Property,XYStage,Port,COM17

# Pre-init settings for COM ports
Property,COM17,AnswerTimeout,500.0000
Property,COM17,BaudRate,9600
Property,COM17,DTR,Disable
Property,COM17,DataBits,8
Property,COM17,DelayBetweenCharsMs,0.0000
Property,COM17,Fast USB to Serial,Disable
Property,COM17,Handshaking,Off
Property,COM17,Parity,None
Property,COM17,StopBits,1
Property,COM17,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Output_Trigger_2_Polarity
# Preset: POSITIVE
ConfigGroup,Output_Trigger_2_Polarity,POSITIVE,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],POSITIVE

# Preset: NEGATIVE
ConfigGroup,Output_Trigger_2_Polarity,NEGATIVE,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],NEGATIVE


# Group: Output_Trigger_2_Source
# Preset: READOUT END
ConfigGroup,Output_Trigger_2_Source,READOUT END,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[1],READOUT END

# Preset: VSYNC
ConfigGroup,Output_Trigger_2_Source,VSYNC,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[1],VSYNC


# Group: Channel

# Group: Output_Trigger_2
# Preset: HIGH
ConfigGroup,Output_Trigger_2,HIGH,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],HIGH

# Preset: EXPOSURE
ConfigGroup,Output_Trigger_2,EXPOSURE,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],EXPOSURE

# Preset: TRIGGER READY
ConfigGroup,Output_Trigger_2,TRIGGER READY,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],TRIGGER READY

# Preset: LOW
ConfigGroup,Output_Trigger_2,LOW,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],LOW

# Preset: PROGRAMABLE
ConfigGroup,Output_Trigger_2,PROGRAMABLE,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],PROGRAMABLE


# Group: System
# Preset: Startup


# Group: Output_Trigger_1
# Preset: HIGH
ConfigGroup,Output_Trigger_1,HIGH,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],HIGH

# Preset: EXPOSURE
ConfigGroup,Output_Trigger_1,EXPOSURE,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],EXPOSURE

# Preset: TRIGGER READY
ConfigGroup,Output_Trigger_1,TRIGGER READY,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],TRIGGER READY

# Preset: LOW
ConfigGroup,Output_Trigger_1,LOW,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],LOW

# Preset: PROGRAMABLE
ConfigGroup,Output_Trigger_1,PROGRAMABLE,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],PROGRAMABLE


# Group: Output_Trigger_1_Source
# Preset: READOUT END
ConfigGroup,Output_Trigger_1_Source,READOUT END,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[0],READOUT END

# Preset: VSYNC
ConfigGroup,Output_Trigger_1_Source,VSYNC,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[0],VSYNC


# Group: Trigger_Polarity
# Preset: POSITIVE
ConfigGroup,Trigger_Polarity,POSITIVE,HamamatsuHam_DCAM,TriggerPolarity,POSITIVE

# Preset: NEGATIVE
ConfigGroup,Trigger_Polarity,NEGATIVE,HamamatsuHam_DCAM,TriggerPolarity,NEGATIVE


# Group: Trigger_Source
# Preset: SOFTWARE
ConfigGroup,Trigger_Source,SOFTWARE,HamamatsuHam_DCAM,TRIGGER SOURCE,SOFTWARE

# Preset: EXTERNAL
ConfigGroup,Trigger_Source,EXTERNAL,HamamatsuHam_DCAM,TRIGGER SOURCE,EXTERNAL

# Preset: INTERNAL
ConfigGroup,Trigger_Source,INTERNAL,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL


# Group: scmos_preset
# Preset: Internal
ConfigGroup,scmos_preset,Internal,HamamatsuHam_DCAM,Binning,2x2
ConfigGroup,scmos_preset,Internal,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],EXPOSURE
ConfigGroup,scmos_preset,Internal,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,scmos_preset,Internal,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[0],READOUT END
ConfigGroup,scmos_preset,Internal,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL
ConfigGroup,scmos_preset,Internal,HamamatsuHam_DCAM,TriggerPolarity,POSITIVE
ConfigGroup,scmos_preset,Internal,HamamatsuHam_DCAM,TRIGGER ACTIVE,EDGE

# Preset: External_Level
ConfigGroup,scmos_preset,External_Level,HamamatsuHam_DCAM,Binning,2x2
ConfigGroup,scmos_preset,External_Level,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],EXPOSURE
ConfigGroup,scmos_preset,External_Level,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,scmos_preset,External_Level,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[0],READOUT END
ConfigGroup,scmos_preset,External_Level,HamamatsuHam_DCAM,TRIGGER ACTIVE,LEVEL
ConfigGroup,scmos_preset,External_Level,HamamatsuHam_DCAM,TRIGGER SOURCE,EXTERNAL
ConfigGroup,scmos_preset,External_Level,HamamatsuHam_DCAM,TriggerPolarity,POSITIVE


# Group: Output_Trigger_1_Polarity
# Preset: POSITIVE
ConfigGroup,Output_Trigger_1_Polarity,POSITIVE,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],POSITIVE

# Preset: NEGATIVE
ConfigGroup,Output_Trigger_1_Polarity,NEGATIVE,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],NEGATIVE


# Group: Ext_Trigger_kind
# Preset: EDGE
ConfigGroup,Ext_Trigger_kind,EDGE,HamamatsuHam_DCAM,TRIGGER ACTIVE,EDGE

# Preset: SYNCREADOUT
ConfigGroup,Ext_Trigger_kind,SYNCREADOUT,HamamatsuHam_DCAM,TRIGGER ACTIVE,SYNCREADOUT

# Preset: LEVEL
ConfigGroup,Ext_Trigger_kind,LEVEL,HamamatsuHam_DCAM,TRIGGER ACTIVE,LEVEL


# Group: Binning
# Preset: 2x2
ConfigGroup,Binning,2x2,HamamatsuHam_DCAM,Binning,2x2

# Preset: 4x4
ConfigGroup,Binning,4x4,HamamatsuHam_DCAM,Binning,4x4

# Preset: 1x1
ConfigGroup,Binning,1x1,HamamatsuHam_DCAM,Binning,1x1


# Group: Trigger
# Preset: NORMAL
ConfigGroup,Trigger,NORMAL,HamamatsuHam_DCAM,Trigger,NORMAL

# Preset: START
ConfigGroup,Trigger,START,HamamatsuHam_DCAM,Trigger,START



# PixelSize settings
# Resolution preset: Res1
ConfigPixelSize,Res1,HamamatsuHam_DCAM,Binning,1x1
PixelSize_um,Res1,0.062
PixelSizeAffine,Res1,0.062,0.0,0.0,0.0,0.062,0.0
# Resolution preset: Res0
ConfigPixelSize,Res0,HamamatsuHam_DCAM,Binning,2x2
PixelSize_um,Res0,0.0576
PixelSizeAffine,Res0,0.0625,0.0,0.0,0.0,0.0625,0.0

